PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = calibration
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine setup
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        import time, atexit
        from pupil_labs.realtime_api.simple import discover_one_device

        def send_event(device, name, clock_offset):
            client_time = time.time_ns()
            device_time = client_time - clock_offset
            device.send_event(
                name,
                event_timestamp_unix_ns=device_time
            )
            return client_time, device_time

        def stop_recording(device):
            device.recording_stop_and_save()
            print("Recording stopped")
            device.close()

        device = discover_one_device(max_search_duration_seconds=10)
        if device is None:
            print("No device found.")
            raise SystemExit(-1)
        atexit.register(stop_recording, device)
      End Experiment:
        stop_recording(device)
      End Routine:
        estimate = device.estimate_time_offset()
        clock_offset_ns = round(estimate.time_offset_ms.mean * 1000000)
        recording_id = device.recording_start()
        print(f"Started recording with id {recording_id}")
        print("Waiting 5s...")
        time.sleep(5)
  Routine calibration
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    PolygonComponent polygon
      fillColor = white
      pos [set every repeat] = (xpos, ypos)
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    KeyboardComponent done_calibrating
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine search_trial
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    CodeComponent send_event
      Code Type = Auto->JS
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      Begin Routine:
        send_event(device, 'trial_start', clock_offset_ns)
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (1, 1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.9
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    GratingComponent grating
      contrast [set every repeat] = grating_contrast
      mask = gauss
      ori = 45
      pos [set every repeat] = (grating_xpos, grating_ypos)
      sf = 6
      size = (1, 1)
      startVal [time (s)] = 1.5
      tex = sin
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    GratingComponent noise
      contrast [set every repeat] = noise_contrast
      opacity = 0
      size = (0.5, 0.5)
      startVal [time (s)] = 1.5
      tex = sin
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    CodeComponent noise_code
      Code Type = Auto->JS
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      Begin Routine:
        noise = NoiseStim(
            win=win, name='pink_noise', units='height',
            noiseImage=None, mask='circle',
            ori=0.0, pos=(0, 0), size=(1, 1), sf=None,
            phase=0.0,
            color=[1,1,1], colorSpace='rgb', opacity=None, blendmode='add', contrast=1.0,
            texRes=256, filter=None,
            noiseType='Filtered', noiseElementSize=[0.0625],
            noiseBaseSf=8.0, noiseBW=1.0,
            noiseBWO=30.0, noiseOri=0.0,
            noiseFractalPower=-1.5,noiseFilterLower=1.0,
            noiseFilterUpper=8.0, noiseFilterOrder=-2.0,
            noiseClip=3.0, imageComponent='Phase', interpolate=False, depth=0.0)
        noise.buildNoise()
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.5
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Flow
  Routine setup
  LoopInitiator calibration_trials loopType="TrialHandler"
    conditionsFile = conditions_calibration_height.xlsx
    loopType = sequential
    nReps = 3
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    conditions:
      [{'xpos': -0.5, 'ypos': 0.5},
      {'xpos': 0, 'ypos': 0.5},
      {'xpos': 0.5, 'ypos': 0.5},
      {'xpos': -0.5, 'ypos': 0},
      {'xpos': 0, 'ypos': 0},
      {'xpos': 0.5, 'ypos': 0},
      {'xpos': -0.5, 'ypos': -0.5},
      {'xpos': 0, 'ypos': -0.5},
      {'xpos': 0.5, 'ypos': -0.5}]
    Routine calibration
  LoopTerminator calibration_trials
