PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'eye_tracking': 'True'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = deg
  Window size (pixels) = [1920, 1080]
  expName = detection
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine detection_trial
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    CodeComponent send_event
      Code Type = Auto->JS
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      Begin Routine:
        grating_angle = np.random.choice(
            np.arange(-np.pi, np.pi,  2 * np.pi / 32)
            )
        grating_x = grating_eccentricity * np.cos(grating_angle)
        grating_y = grating_eccentricity * np.sin(grating_angle)

        if expInfo['eye_tracking']:
            send_event(device, 'trial_start', clock_offset_ns)
    PolygonComponent fixation_D1
      fillColor = white
      shape = cross
      size = (1, 1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.9
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    GratingComponent grating_D1
      blendmode = add
      contrast [set every repeat] = grating_contrast
      mask = gauss
      opacity [set every repeat] = grating_in_D1
      ori = 45
      pos [set every repeat] = (grating_x, grating_y)
      sf = 6
      size = (1, 1)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 0.25
      tex = sin
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    GratingComponent noise_D1
      contrast [set every repeat] = noise_contrast
      opacity = 0
      size = (0.5, 0.5)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 0.25
      tex = sin
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    CodeComponent noise_code_D1
      Code Type = Auto->JS
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      Begin Routine:
        noise_D1 = NoiseStim(
            win=win, name='pink_noise_1', units='height',
            noiseImage=None, mask='circle',
            ori=0.0, pos=(0, 0), size=(1, 1), sf=None,
            phase=0.0,
            color=[1,1,1], colorSpace='rgb', opacity=None, blendmode='add', contrast=1.0,
            texRes=256, filter=None,
            noiseType='Filtered', noiseElementSize=[0.0625],
            noiseBaseSf=8.0, noiseBW=1.0,
            noiseBWO=30.0, noiseOri=0.0,
            noiseFractalPower=-1.25,noiseFilterLower=1.0,
            noiseFilterUpper=8.0, noiseFilterOrder=-2.0,
            noiseClip=3.0, imageComponent='Phase', interpolate=False, depth=0.0)
        noise_D1.buildNoise()
    GratingComponent grating_D2
      blendmode = add
      contrast [set every repeat] = grating_contrast
      mask = gauss
      opacity [set every repeat] = grating_in_D2
      ori = 45
      pos [set every repeat] = (grating_x, grating_y)
      sf = 6
      size = (1, 1)
      startVal [time (s)] = 2.25
      stopVal [duration (s)] = 0.25
      tex = sin
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    GratingComponent noise_D2
      contrast [set every repeat] = noise_contrast
      opacity = 0
      size = (0.5, 0.5)
      startVal [time (s)] = 2.25
      stopVal [duration (s)] = 0.25
      tex = sin
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    CodeComponent noise_code_D2
      Code Type = Auto->JS
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      Begin Routine:
        noise_D2 = NoiseStim(
            win=win, name='pink_noise_1', units='height',
            noiseImage=None, mask='circle',
            ori=0.0, pos=(0, 0), size=(1, 1), sf=None,
            phase=0.0,
            color=[1,1,1], colorSpace='rgb', opacity=None, blendmode='add', contrast=1.0,
            texRes=256, filter=None,
            noiseType='Filtered', noiseElementSize=[0.0625],
            noiseBaseSf=8.0, noiseBW=1.0,
            noiseBWO=30.0, noiseOri=0.0,
            noiseFractalPower=-1.25,noiseFilterLower=1.0,
            noiseFilterUpper=8.0, noiseFilterOrder=-2.0,
            noiseClip=3.0, imageComponent='Phase', interpolate=False, depth=0.0)
        noise_D2.buildNoise()
    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = correct_key
      forceEndRoutine = True
      startVal [time (s)] = 2.5
      storeCorrect = True
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  Routine setup
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy_visionscience.noise import NoiseStim

        import time, atexit
        from pupil_labs.realtime_api.simple import discover_one_device

        def send_event(device, name, clock_offset):
            client_time = time.time_ns()
            device_time = client_time - clock_offset
            device.send_event(
                name,
                event_timestamp_unix_ns=device_time
            )
            return client_time, device_time

        def stop_recording(device):
            device.recording_stop_and_save()
            print("Recording stopped")
            device.close()

        if expInfo['eye_tracking']:
            device = discover_one_device(max_search_duration_seconds=10)
            if device is None:
                print("No eye-tracking device found.")
                raise SystemExit(-1)
      End Experiment:
        if expInfo['eye_tracking']:
            stop_recording(device)
  Routine calibration
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (2.5, 2.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent done_calibrating
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent calibration_prompt
      letterHeight = 2
      pos = (0, -10)
      startVal [time (s)] = 0.0
      text = Press 'space' when calibration is complete.
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    CodeComponent start_recording
      Code Type = Auto->JS
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      End Routine:
        if expInfo['eye_tracking']:
            estimate = device.estimate_time_offset()
            clock_offset_ns = round(estimate.time_offset_ms.mean * 1000000)
            recording_id = device.recording_start()
            print(f"Started recording with id {recording_id}")
            print("Waiting 5s...")
            time.sleep(5)
  Routine instruction
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    TextComponent instruction_text
      letterHeight = 1
      startVal [time (s)] = 0.0
      wrapWidth = 30
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      text:
        Welcome to the detection experiment.

        On each trial, begin by fixing your gaze on the cross. After the cross disappears, two patches of noise will appear one after the other. One of the noise patches will contain a small oriented grating. Please indicate whether the grating was in the first (press left) or second (press right) patch of noise. Try to keep your gaze in the center of the display.

        Press space to continue to the eye tracker calibration.
    KeyboardComponent instruction_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine setup
  Routine instruction
  Routine calibration
  LoopInitiator detection_trials loopType="TrialHandler"
    conditionsFile = conditions_detection.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'noise_contrast': 1, 'grating_contrast': 0.01, 'grating_eccentricity': 0, 'grating_in_D1': 1, 'grating_in_D2': 0, 'correct_key': 'left'},
      {'noise_contrast': 1, 'grating_contrast': 0.01, 'grating_eccentricity': 3, 'grating_in_D1': 1, 'grating_in_D2': 0, 'correct_key': 'left'},
      {'noise_contrast': 1, 'grating_contrast': 0.01, 'grating_eccentricity': 6, 'grating_in_D1': 1, 'grating_in_D2': 0, 'correct_key': 'left'},
      {'noise_contrast': 1, 'grating_contrast': 0.01, 'grating_eccentricity': 9, 'grating_in_D1': 1, 'grating_in_D2': 0, 'correct_key': 'left'},
      {'noise_contrast': 1, 'grating_contrast': 0.01, 'grating_eccentricity': 12, 'grating_in_D1': 1, 'grating_in_D2': 0, 'correct_key': 'left'},
      {'noise_contrast': 1, 'grating_contrast': 0.01, 'grating_eccentricity': 0, 'grating_in_D1': 0, 'grating_in_D2': 1, 'correct_key': 'right'},
      {'noise_contrast': 1, 'grating_contrast': 0.01, 'grating_eccentricity': 3, 'grating_in_D1': 0, 'grating_in_D2': 1, 'correct_key': 'right'},
      {'noise_contrast': 1, 'grating_contrast': 0.01, 'grating_eccentricity': 6, 'grating_in_D1': 0, 'grating_in_D2': 1, 'correct_key': 'right'},
      {'noise_contrast': 1, 'grating_contrast': 0.01, 'grating_eccentricity': 9, 'grating_in_D1': 0, 'grating_in_D2': 1, 'correct_key': 'right'},
      {'noise_contrast': 1, 'grating_contrast': 0.01, 'grating_eccentricity': 12, 'grating_in_D1': 0, 'grating_in_D2': 1, 'correct_key': 'right'}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
    Routine detection_trial
  LoopTerminator detection_trials
