PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'eye_tracking': 'True'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = deg
  Window size (pixels) = [1920, 1080]
  expName = search
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine setup
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        from psychopy_visionscience.noise import NoiseStim

        import time, atexit
        from pupil_labs.realtime_api.simple import discover_one_device

        def send_event(device, name, clock_offset):
            client_time = time.time_ns()
            device_time = client_time - clock_offset
            device.send_event(
                name,
                event_timestamp_unix_ns=device_time
            )
            return client_time, device_time

        def stop_recording(device):
            device.recording_stop_and_save()
            print("Recording stopped")
            device.close()
      Begin Experiment:
        if expInfo['eye_tracking']:
            device = discover_one_device(max_search_duration_seconds=10)
            if device is None:
                print("No device found.")
                raise SystemExit(-1)
            atexit.register(stop_recording, device)
      End Experiment:
        if expInfo['eye_tracking']:
            stop_recording(device)
  Routine calibration
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (2.5, 2.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent done_calibrating
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent calibration_prompt
      letterHeight = 2
      pos = (0, -10)
      startVal [time (s)] = 0.0
      text = Press 'space' when calibration is complete.
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    CodeComponent start_recording
      Code Type = Auto->JS
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      End Routine:
        if expInfo['eye_tracking']:
            estimate = device.estimate_time_offset()
            clock_offset_ns = round(estimate.time_offset_ms.mean * 1000000)
            recording_id = device.recording_start()
            print(f"Started recording with id {recording_id}")
            print("Waiting 5s...")
            time.sleep(5)
  Routine search_trial
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    CodeComponent send_event
      Code Type = Auto->JS
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      Begin Routine:
        grating_angle = np.random.choice(
            np.arange(-np.pi, np.pi, 2 * np.pi / 32)
            )
        grating_xpos = grating_eccentricity * np.cos(grating_angle)
        grating_ypos = grating_eccentricity * np.sin(grating_angle)

        if expInfo['eye_tracking']:
            send_event(device, 'trial_start', clock_offset_ns)
      End Routine:
        thisExp.addData('grating_angle', grating_angle)
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (1, 1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.9
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    GratingComponent grating
      blendmode = add
      contrast [set every repeat] = grating_contrast
      mask = gauss
      ori = 45
      pos [set every repeat] = (grating_xpos, grating_ypos)
      sf = 6
      size = (1, 1)
      startVal [time (s)] = 1.5
      tex = sin
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    GratingComponent noise
      contrast [set every repeat] = noise_contrast
      opacity = 0
      size = (0.5, 0.5)
      startVal [time (s)] = 1.5
      tex = sin
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    CodeComponent noise_code
      Code Type = Auto->JS
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      Begin Routine:
        noise = NoiseStim(
            win=win, name='pink_noise', units='height',
            noiseImage=None, mask='circle',
            ori=0.0, pos=(0, 0), size=(1, 1), sf=None,
            phase=0.0,
            color=[1,1,1], colorSpace='rgb', opacity=None, blendmode='add', contrast=1.0,
            texRes=128, filter=None,
            noiseType='Filtered', noiseElementSize=[0.0625],
            noiseBaseSf=8.0, noiseBW=1.0,
            noiseBWO=30.0, noiseOri=0.0,
            noiseFractalPower=-1.25, noiseFilterLower=1.0,
            noiseFilterUpper=8.0, noiseFilterOrder=-2.0,
            noiseClip=3.0, imageComponent='Phase', interpolate=False, depth=0.0)
        noise.buildNoise()
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.5
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  Routine instruction
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    TextComponent instruction_text
      letterHeight = 1
      startVal [time (s)] = 0.0
      wrapWidth = 30
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      text:
        Welcome to the search experiment.

        Before the trial starts please fix your gaze on the cross. At the start of the trial a patch of noise will appear, there will be a small oriented grating somewhere in the noise patch. Your task is to move your eyes to search for the grating. Once you have found the grating keep your gaze fixed on that position and press the space bar.

        Press space to continue to the eye tracker calibration.
    KeyboardComponent instruction_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine setup
  Routine instruction
  Routine calibration
  LoopInitiator search_trials loopType="TrialHandler"
    conditionsFile = conditions_search.xlsx
    loopType = random
    nReps = 20
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    conditions:
      [{'grating_eccentricity': 3, 'grating_contrast': 0.1, 'noise_contrast': 1},
      {'grating_eccentricity': 6, 'grating_contrast': 0.1, 'noise_contrast': 1},
      {'grating_eccentricity': 9, 'grating_contrast': 0.1, 'noise_contrast': 1},
      {'grating_eccentricity': 12, 'grating_contrast': 0.1, 'noise_contrast': 1}]
    Routine search_trial
  LoopTerminator search_trials
